PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = pareidolia
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent expImg
      image [set every repeat] = $stimuli_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    KeyboardComponent exp_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    CodeComponent expCode
      Code Type = Auto->JS
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      Begin Routine:
        expResult = "Error"
      End Routine:
        if face == exp_resp.keys:
            expResult = "Correct"
        elif face != exp_resp.keys:
            expResult = "Wrong"
        else:
            expResult = "Input Error"
  Routine instruction
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this section of the experiment, we will be conducting a speeded test. You will be presented with a series of images, and your task is to indicate whether you see a face or not by clicking 'y' for yes and 'n' for no.

        Click 'y' to continue.
    KeyboardComponent instruction_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo
    TextComponent startDemo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Before we start, let us try a demo.
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    TextComponent demoInstruction
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = Press 'y' if you see any face/ face-like object, if not, press 'n'
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    PolygonComponent demoFixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    ImageComponent demoImage
      image [set every repeat] = $stimuli
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3
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    KeyboardComponent demoResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3
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    CodeComponent checkResult
      Code Type = Auto->JS
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      Begin Routine:
        demo_result = "Input Error"
      End Routine:
        if demo_face == demoResp.keys:
            demo_result = "Correct"
        elif demo_face != demoResp.keys:
            demo_result = "Wrong"
        else:
            demo_result = "Input Error"
  Routine demoloop
    TextComponent Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $demo_result
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    TextComponent demoLoop
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = Press ‘y' to continue to the experiment, 'n' to try again the demo.
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    KeyboardComponent demoLoopResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent demoCode
      Code Type = Auto->JS
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      End Routine:
        if demoLoopResp.keys == 'y':
            demoReps.finished = True;
  Routine trialFeedback
    TextComponent expFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $expResult
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if trials.thisN == 59:
            trials.finished = True
  Routine ExpIntruction
    TextComponent ExpInstruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press 'y' if you see any face/ face-like object, if not, press 'n'.

        Click 'y' whenever you are ready.
    KeyboardComponent continueExp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodBye
    TextComponent goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You completed this section. Now u will be directed to the last section.

        Click 'y' to proceed.
    KeyboardComponent goodbye_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator demoReps loopType="TrialHandler"
    conditionsFile = demo.xlsx
    isTrials = False
    loopType = random
    nReps = 19
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    conditions:
      [{'stimuli': 'images/demo (1).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (2).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (3).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (4).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (5).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (6).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (7).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (8).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (9).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (10).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (11).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (12).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (13).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (14).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (15).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (16).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (17).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (18).png', 'demo_face': 'y'},
      {'stimuli': 'images/demo (19).png', 'demo_face': 'y'}]
    Routine demo
    Routine demoloop
  LoopTerminator demoReps
  Routine ExpIntruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pareidolia.xlsx
    loopType = random
    nReps = 44
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    conditions:
      [{'stimuli_images': 'images/F - Bag.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Coffee.png', 'face': 'y'},
      {'stimuli_images': 'images/F - Elec-Plug.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Mugs.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Onion.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Tiang.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Tree.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Bag 2.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - House.jpg', 'face': 'y'},
      {'stimuli_images': 'images/F - Vege.jpg', 'face': 'y'},
      {'stimuli_images': 'images/NF - Elec-Plug.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Bag 2.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Bag.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Coffee.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - House.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Tree.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Mugs.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Onion.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Tiang.jpg', 'face': 'n'},
      {'stimuli_images': 'images/NF - Vege.png', 'face': 'n'},
      {'stimuli_images': 'images/AF - Aquamarine.png', 'face': 'y'},
      {'stimuli_images': 'images/AF - girl 1.png', 'face': 'y'},
      {'stimuli_images': 'images/AF - girl 2.png', 'face': 'y'},
      {'stimuli_images': 'images/AF - HoshinoAI.png', 'face': 'y'},
      {'stimuli_images': 'images/AF - Cat.jpg', 'face': 'y'},
      {'stimuli_images': 'images/AF - Duck.png', 'face': 'y'}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
    Routine trial
    Routine trialFeedback
  LoopTerminator trials
  Routine GoodBye
